CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileName>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:NEON
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:BF
    Name the output image:RescaleBF
    Rescaling method:Stretch each image to use the full intensity range
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:RescaleBF
    Name the output image:IllumBF
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:RescaleBF
    Name the output image:CorrBF
    Select the illumination function:IllumBF
    Select how the illumination function is applied:Divide

ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MathBF
    Image or measurement?:Image
    Select the first image:CorrBF
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:MathBF
    Name the output image:EnhanceBF
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhanceBF
    Name the primary objects to be identified:CellBF
    Typical diameter of objects, in pixel units (Min,Max):35,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.08,1.0
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:CellBF
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:NEON
    Select objects to measure:CellBF

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrBF
    Name the output image:BFOver
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:CellBF

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:BFOver
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_over
    Saved file format:tiff
    Output file location:Elsewhere...|H:\\PhD-Projekt\\Labor\\Immortalisierung\\Senescence\\INCA Senescence Serie 5 dogs\\CP_Tranfection efficiency\\Overlay\\Selection_C9
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\PhD-Projekt\\Labor\\Immortalisierung\\Senescence\\INCA Senescence Serie 5 dogs\\CP_Tranfection efficiency\\Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CellBF|Intensity_MinIntensity_NEON,CellBF|Intensity_MaxIntensity_NEON,CellBF|Intensity_MedianIntensity_NEON,CellBF|Intensity_MeanIntensity_NEON,CellBF|Intensity_IntegratedIntensity_NEON,CellBF|AreaShape_FormFactor,CellBF|AreaShape_Area,CellBF|Number_Object_Number,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Image|URL_BF,Image|FileName_BF
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20200425_AS_C9_Selection_
    Overwrite existing files without warning?:No
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