CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<WellRow>[A-H]) - (?P<WellCol>[0-9]{2})\(fld (?P<Field>[0-9]{3}) wv (?P<Channel>[A-Z])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DAPI
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:10
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:DAPI
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuc
    Calculate the Zernike features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:Nuc
    Name the output objects:FilterNuc
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:FilterNuc
    Calculate the Zernike features?:No

RescaleIntensity:[module_num:11|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
    Select the input image:DAPI
    Name the output image:ResDNA
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ResDNA
    Name the output image:DNAOver
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#80FFFF
    Select objects to display:FilterNuc

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:DNAOver
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_over
    Saved file format:tiff
    Output file location:Elsewhere...|H:\\PhD-Projekt\\Labor\\Immortalisierung\\Senescence\\INCA Senescence Serie 5 dogs\\CP_Proliferation\\CP_Prolif_Images\\Sen_P3_HE_Day07
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|H:\\PhD-Projekt\\Labor\\Immortalisierung\\Senescence\\INCA Senescence Serie 5 dogs\\CP_Proliferation\\CP_Prolif_Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterNuc|Number_Object_Number,FilterNuc|AreaShape_FormFactor,FilterNuc|AreaShape_Area,Image|Count_FilterNuc,Image|Count_Nuc,Image|URL_DAPI
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Sen_P3_HE_Day07_
    Overwrite existing files without warning?:No
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