CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<WellRow>[A-H]) - (?P<WellCol>[0-9]{2})\(fld (?P<Field>[0-9]{2}) wv (?P<ex>.*) -
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:GLB1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:Bmi1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3")
    Name to assign these images:Skel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.023,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuc
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Skel
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.027,1.0
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:GLB1
    Name the output image:EnhanceGLB1
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow

MaskImage:[module_num:8|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
    Select the input image:EnhanceGLB1
    Name the output image:MaskGLB1
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MaskGLB1
    Name the primary objects to be identified:GLB1_Foci
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

RelateObjects:[module_num:10|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
    Parent objects:Cell
    Child objects:GLB1_Foci
    Name the output object:GLB1_Foci_Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:EnhanceGLB1
    Select an image to measure:Bmi1
    Select objects to measure:Nuc
    Select objects to measure:Cell

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuc
    Select objects to measure:Cell
    Calculate the Zernike features?:No

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:Neighbor
    Select colormap:Greens
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:Touching
    Select colormap:Purples

RescaleIntensity:[module_num:14|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
    Select the input image:DAPI
    Name the output image:ResDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:15|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
    Select the input image:Skel
    Name the output image:ResSkel
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:16|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
    Select the input image:GLB1
    Name the output image:ResGLB1
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:17|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
    Select a color scheme:RGB
    Select the image to be colored red:ResSkel
    Select the image to be colored green:ResGLB1
    Select the image to be colored blue:ResDAPI
    Name the output image:Fused
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Fused
    Name the output image:SkelOver
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#80FFFF
    Select objects to display:Nuc
    Select outline color:red
    Select objects to display:Cell
    Select outline color:#00FF80
    Select objects to display:GLB1_Foci_Cell

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:SkelOver
    Select method for constructing file names:From image filename
    Select image name for file prefix:Skel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_over
    Saved file format:tiff
    Output file location:Elsewhere...|H:\\PhD-Projekt\\Labor\\Immortalisierung\\Senescence\\INCA Senescence Serie 5 dogs\\CP_ImmunoStaining\\Immo_P0\\GLB1_Bmi1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\PhD-Projekt\\Labor\\Immortalisierung\\Senescence\\INCA Senescence Serie 5 dogs\\CP_ImmunoStaining\\Immo_P0\\Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:GLB1_Foci|Number_Object_Number,Image|URL_DAPI,Image|URL_Skel,Image|URL_Bmi1,Cell|Neighbors_PercentTouching_5,Cell|Neighbors_NumberOfNeighbors_5,Cell|Number_Object_Number,Cell|Intensity_MinIntensity_DAPI,Cell|Intensity_MinIntensity_Bmi1,Cell|Intensity_IntegratedIntensityEdge_DAPI,Cell|Intensity_IntegratedIntensityEdge_Bmi1,Cell|Intensity_MinIntensityEdge_DAPI,Cell|Intensity_MinIntensityEdge_Bmi1,Cell|Intensity_MeanIntensity_DAPI,Cell|Intensity_MeanIntensity_Bmi1,Cell|Intensity_IntegratedIntensity_DAPI,Cell|Intensity_IntegratedIntensity_Bmi1,Cell|Intensity_MeanIntensityEdge_DAPI,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Immo_P0_GLB1_Bmi1_
    Overwrite existing files without warning?:No
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